PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tutorial6_delaydiscounting
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $" GBP " + str(reward_today) + " today " + " or " + " GBP " + str(future_reward) + " after " + str(delay) + " days "
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data/tutorial 6/gbp_cons.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 55, 'future_reward': 78, 'delay': 44},
      {'reward_today': 78, 'future_reward': 81, 'delay': 87},
      {'reward_today': 22, 'future_reward': 23, 'delay': 78},
      {'reward_today': 44, 'future_reward': 78, 'delay': 1},
      {'reward_today': 77, 'future_reward': 91, 'delay': 23},
      {'reward_today': 5, 'future_reward': 50, 'delay': 26},
      {'reward_today': 89, 'future_reward': 90, 'delay': 76},
      {'reward_today': 22, 'future_reward': 76, 'delay': 19},
      {'reward_today': 34, 'future_reward': 40, 'delay': 19},
      {'reward_today': 15, 'future_reward': 35, 'delay': 43},
      {'reward_today': 76, 'future_reward': 80, 'delay': 56},
      {'reward_today': 89, 'future_reward': 92, 'delay': 69},
      {'reward_today': 24, 'future_reward': 70, 'delay': 78},
      {'reward_today': 65, 'future_reward': 80, 'delay': 1},
      {'reward_today': 9, 'future_reward': 70, 'delay': 23},
      {'reward_today': 61, 'future_reward': 80, 'delay': 26},
      {'reward_today': 67, 'future_reward': 70, 'delay': 12},
      {'reward_today': 90, 'future_reward': 93, 'delay': 56},
      {'reward_today': 59, 'future_reward': 69, 'delay': 167},
      {'reward_today': 3, 'future_reward': 40, 'delay': 189}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
    Routine trial
  LoopTerminator trials
